---
API: 2.1
OpenSesame: 3.3.12
Platform: posix
---
set width 1024
set uniform_coordinates yes
set title "Extended template"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set pygame_doublebuf no
set mouse_backend xpyriment
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set expyriment_opengl no
set experiment_path "/Users/jakobthygesen/Desktop/Cognitive Science/3rd semester/Perception and action/PercActExam"
set disable_garbage_collection yes
set description "A template containing a practice and an experimental phase"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend xpyriment
set bidi yes
set background black

define sequence block_sequence
	set flush_keyboard yes
	set description "A sequence containing a single block of trials followed by feedback to the participant"
	run reset_feedback always
	run practice_setup "[practice]==yes"
	run experimental_setup "[practice]==no"

define sketchpad end_of_experiment
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the experiment is finished"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="Eksperimentet er slut.<br /><br />Tak for din deltagelse!" x=0 y=0 z_index=0

define sketchpad end_of_practice
	set start_response_interval no
	set duration keypress
	set description "A sketchpad notifying the participant that the practice phase is finished"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="Det var øve-runden. Prøv gerne om du kan svare lidt hurtigere. <br /><br />Tryk på en valgfri tast for at fortsætte til det rigtige eksperiment" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "The main sequence of the experiment"
	run instructions always
	run practice_loop always
	run end_of_practice always
	run experimental_loop always
	run end_of_experiment always

define loop experimental_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more experimental blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	run block_sequence

define loop experimental_setup
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 left_figure "lynlås_ly.jpg"
	setcycle 0 right_figure "lyntog_ly.jpg"
	setcycle 0 sound ""
	setcycle 0 word "Lynlås"
	setcycle 0 correct_button left_button
	setcycle 0 Condition 2
	setcycle 1 left_figure "bygning_by.jpg"
	setcycle 1 right_figure "bygmark_by.jpg"
	setcycle 1 sound ""
	setcycle 1 word Bygmark
	setcycle 1 correct_button right_button
	setcycle 1 Condition 2
	setcycle 2 left_figure "plantegning_pla.jpg"
	setcycle 2 right_figure "plante_pla.jpg"
	setcycle 2 sound ""
	setcycle 2 word Plante
	setcycle 2 correct_button right_button
	setcycle 2 Condition 2
	setcycle 3 left_figure "skydeskive_sky.jpg"
	setcycle 3 right_figure "sky_sky.jpg"
	setcycle 3 sound ""
	setcycle 3 word Skydeskive
	setcycle 3 correct_button left_button
	setcycle 3 Condition 2
	setcycle 4 left_figure "kajak_ka.jpg"
	setcycle 4 right_figure "kage_ka.jpg"
	setcycle 4 sound ""
	setcycle 4 word Kage
	setcycle 4 correct_button right_button
	setcycle 4 Condition 2
	setcycle 5 left_figure "vindruer_vin.jpg"
	setcycle 5 right_figure "vindue_vin.jpg"
	setcycle 5 sound ""
	setcycle 5 word Vindrue
	setcycle 5 correct_button right_button
	setcycle 5 Condition 2
	setcycle 6 left_figure "kaffe_ka2.jpg"
	setcycle 6 right_figure "kartoffel_ka2.jpg"
	setcycle 6 sound ""
	setcycle 6 word Kartoffel
	setcycle 6 correct_button right_button
	setcycle 6 Condition 2
	setcycle 7 left_figure "fjer_fje.jpg"
	setcycle 7 right_figure "fjeder_fje.jpg"
	setcycle 7 sound ""
	setcycle 7 word Fjer
	setcycle 7 correct_button left_button
	setcycle 7 Condition 2
	setcycle 8 left_figure "lyntog_ly.jpg"
	setcycle 8 right_figure "lynlås_ly.jpg"
	setcycle 8 sound ""
	setcycle 8 word Lyntog
	setcycle 8 correct_button left_button
	setcycle 8 Condition 1
	setcycle 9 left_figure "bygmark_by.jpg"
	setcycle 9 right_figure "bygning_by.jpg"
	setcycle 9 sound ""
	setcycle 9 word Bygning
	setcycle 9 correct_button right_button
	setcycle 9 Condition 1
	setcycle 10 left_figure "plante_pla.jpg"
	setcycle 10 right_figure "plantegning_pla.jpg"
	setcycle 10 sound ""
	setcycle 10 word Plante
	setcycle 10 correct_button left_button
	setcycle 10 Condition 1
	setcycle 11 left_figure "sky_sky.jpg"
	setcycle 11 right_figure "skydeskive_sky.jpg"
	setcycle 11 sound ""
	setcycle 11 word Skydeskive
	setcycle 11 correct_button right_button
	setcycle 11 Condition 1
	setcycle 12 left_figure "kajak_ka.jpg"
	setcycle 12 right_figure "kage_ka.jpg"
	setcycle 12 sound ""
	setcycle 12 word Kajak
	setcycle 12 correct_button left_button
	setcycle 12 Condition 1
	setcycle 13 left_figure "vindruer_vin.jpg"
	setcycle 13 right_figure "vindue_vin.jpg"
	setcycle 13 sound ""
	setcycle 13 word Vindrue
	setcycle 13 correct_button right_button
	setcycle 13 Condition 1
	setcycle 14 left_figure "kaffe_ka2.jpg"
	setcycle 14 right_figure "kartoffel_ka2.jpg"
	setcycle 14 sound ""
	setcycle 14 word Kartoffel
	setcycle 14 correct_button left_button
	setcycle 14 Condition 1
	setcycle 15 left_figure "fjer_fje.jpg"
	setcycle 15 right_figure "fjeder_fje.jpg"
	setcycle 15 sound ""
	setcycle 15 word Fjer
	setcycle 15 correct_button right_button
	setcycle 15 Condition 1
	setcycle 16 left_figure "lynlås_ly.jpg"
	setcycle 16 right_figure "lyntog_ly.jpg"
	setcycle 16 sound ""
	setcycle 16 word Kasse
	setcycle 16 correct_button right_button
	setcycle 16 Condition 0
	setcycle 17 left_figure "bygning_by.jpg"
	setcycle 17 right_figure "bygmark_by.jpg"
	setcycle 17 sound ""
	setcycle 17 word Jakke
	setcycle 17 correct_button left_button
	setcycle 17 Condition 0
	setcycle 18 left_figure "plantegning_pla.jpg"
	setcycle 18 right_figure "plante_pla.jpg"
	setcycle 18 sound ""
	setcycle 18 word Bold
	setcycle 18 correct_button right_button
	setcycle 18 Condition 0
	setcycle 19 left_figure "skydeskive_sky.jpg"
	setcycle 19 right_figure "sky_sky.jpg"
	setcycle 19 sound ""
	setcycle 19 word Karussel
	setcycle 19 correct_button left_button
	setcycle 19 Condition 0
	setcycle 20 left_figure "kage_ka.jpg"
	setcycle 20 right_figure "kajak_ka.jpg"
	setcycle 20 sound ""
	setcycle 20 word Trold
	setcycle 20 correct_button right_button
	setcycle 20 Condition 0
	setcycle 21 left_figure "vindue_vin.jpg"
	setcycle 21 right_figure "vindruer_vin.jpg"
	setcycle 21 sound ""
	setcycle 21 word Luftballon
	setcycle 21 correct_button left_button
	setcycle 21 Condition 0
	setcycle 22 left_figure "kartoffel_ka2.jpg"
	setcycle 22 right_figure "kaffe_ka2.jpg"
	setcycle 22 sound ""
	setcycle 22 word Motorcykel
	setcycle 22 correct_button right_button
	setcycle 22 Condition 0
	setcycle 23 left_figure "fjeder_fje.jpg"
	setcycle 23 right_figure "fjer_fje.jpg"
	setcycle 23 sound ""
	setcycle 23 word Labrador
	setcycle 23 correct_button left_button
	setcycle 23 Condition 0
	run new_sequence

define sketchpad instructions
	set start_response_interval no
	set duration keypress
	set description "A sketchpad containing the instructions for the participant"
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=27 html=yes show_if=always text="Velkommen til dette eksperiment!<br /><br />I dette eksperiment vil du blive præsenteret for forskellige ord - et ord vil blive læst op for dig og et ord vil stå skrevet på skærmen. Derudover vil du blive præsenteret for to billeder. Din opgave er hurtigst muligt at klikke på det billede der bedst repræsenterer det ord du HØRER.<br /><br /><br />Når du har valgt et billede går eksperimentet automatisk videre til næste sæt af ord.<br /><br />Vi starter nu med en øve-runde før det faktiske eksperiment starter.<br /><br />Tryk på en valgfri tast for at begynde!" x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define mousetrap_response new_mousetrap_response
	__warning_message__
	draw textline text="Please start moving" x=0 y=0
	__end__
	set update_feedback yes
	set timeout infinite
	set start_coordinates "0;288"
	set skip_item no
	set sketchpad trial_stimuli
	set save_trajectories yes
	set reset_mouse yes
	set number_of_buttons 2
	set mouse_buttons_allowed "left_button;right_button"
	set max_initiation_time 1000
	set logging_resolution 10
	set description "Tracks mouse movements"
	set correct_button "[correct_button]"
	set click_required yes
	set check_initiation_time no
	set button4 ""
	set button3 ""
	set button2 right_button
	set button1 left_button
	set boundaries "upper=no lower=no left=no right=no"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run trial_stimuli always
	run new_synth_1 always
	run trial_stimuli_1 always
	run trial_stimuli_3 always
	run new_synth_2 always
	run trial_stimuli_1 always
	run trial_stimuli_2 always
	run new_mousetrap_response always
	run logger always

define synth new_synth
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth new_synth_1
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define synth new_synth_2
	set volume 1
	set pan 0
	set osc sine
	set length 100
	set freq 440
	set duration sound
	set description "A basic sound synthesizer"
	set decay 5
	set attack 0

define loop practice_loop
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order random
	set offset no
	set item block_sequence
	set description "A loop containing one or more practice blocks"
	set cycles 1
	set continuous no
	set column_order practice
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	run block_sequence

define loop practice_setup
	set source_file ""
	set source table
	set skip 0
	set repeat 1
	set order sequential
	set offset no
	set item trial_sequence
	set description "A single block of trials"
	set cycles 4
	set continuous no
	set column_order ""
	set break_if_on_first yes
	set break_if never
	setcycle 0 left_figure "computer_ko.jpg"
	setcycle 0 right_figure "kommode_ko.jpg"
	setcycle 0 sound ""
	setcycle 0 word Hue
	setcycle 0 correct_button left_button
	setcycle 0 Condition 0
	setcycle 1 left_figure "klatkage_kla.jpg"
	setcycle 1 right_figure "klatresko_kla.jpg"
	setcycle 1 sound ""
	setcycle 1 word Kop
	setcycle 1 correct_button right_button
	setcycle 1 Condition 0
	setcycle 2 left_figure "lyssestage_lys.jpg"
	setcycle 2 right_figure "lyssværd_lys.png"
	setcycle 2 sound ""
	setcycle 2 word Cykel
	setcycle 2 correct_button right_button
	setcycle 2 Condition 0
	setcycle 3 left_figure "rokke_rå.jpg"
	setcycle 3 right_figure "råkost_rå.JPG"
	setcycle 3 sound ""
	setcycle 3 word Dans
	setcycle 3 correct_button left_button
	setcycle 3 Condition 0
	run trial_sequence

define reset_feedback reset_feedback
	set description "Resets the feedback variables, such as 'avg_rt' and 'acc'"

define sequence trial_sequence
	set flush_keyboard yes
	set description "A single trial"
	run trial_stimuli always
	run new_synth always
	run trial_stimuli_1 always
	run trial_stimuli_3 always
	run new_synth always
	run trial_stimuli_1 always
	run trial_stimuli_2 always
	run new_mousetrap_response always
	run logger always

define sketchpad trial_stimuli
	set duration 1000
	set description "Displays stimuli"
	draw rect color=white fill=0 h=192 name=left_button penwidth=1 show_if=always w=192 x=-416 y=-320 z_index=0
	draw rect color=white fill=0 h=192 name=right_button penwidth=1 show_if=always w=192 x=224 y=-320 z_index=0
	draw image center=1 file="[left_figure]" scale=1 show_if=always x=-320 y=-224 z_index=0
	draw image center=1 file="[right_figure]" scale=1 show_if=always x=320 y=-224 z_index=0

define sketchpad trial_stimuli_1
	set duration 200
	set description "Displays stimuli"
	draw rect color=white fill=0 h=192 name=left_button penwidth=1 show_if=always w=192 x=-416 y=-320 z_index=0
	draw rect color=white fill=0 h=192 name=right_button penwidth=1 show_if=always w=192 x=224 y=-320 z_index=0
	draw image center=1 file="[left_figure]" scale=1 show_if=always x=-320 y=-224 z_index=0
	draw image center=1 file="[right_figure]" scale=1 show_if=always x=320 y=-224 z_index=0
	draw fixdot color=white show_if=always style=default x=0 y=224 z_index=0

define sketchpad trial_stimuli_2
	set duration 0
	set description "Displays stimuli"
	draw rect color=white fill=0 h=192 name=left_button penwidth=1 show_if=always w=192 x=-416 y=-320 z_index=0
	draw rect color=white fill=0 h=192 name=right_button penwidth=1 show_if=always w=192 x=224 y=-320 z_index=0
	draw image center=1 file="[left_figure]" scale=1 show_if=always x=-320 y=-224 z_index=0
	draw image center=1 file="[right_figure]" scale=1 show_if=always x=320 y=-224 z_index=0
	draw textline center=1 color=white font_bold=no font_family=serif font_italic=no font_size=35 html=yes show_if=always text="[word]" x=0 y=224 z_index=0

define sketchpad trial_stimuli_3
	set duration 200
	set description "Displays stimuli"
	draw rect color=white fill=0 h=192 name=left_button penwidth=1 show_if=always w=192 x=-416 y=-320 z_index=0
	draw rect color=white fill=0 h=192 name=right_button penwidth=1 show_if=always w=192 x=224 y=-320 z_index=0
	draw image center=1 file="[left_figure]" scale=1 show_if=always x=-320 y=-224 z_index=0
	draw image center=1 file="[right_figure]" scale=1 show_if=always x=320 y=-224 z_index=0

